OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=2.2.0)

GDF file reader => #0
  Filename = C:/Users/Mathi/Documents/DTU/Bachelor Project/OpenViBE/Experiments/Niels_Forsog1_Layout2.gdf
  Samples per buffer = 32
  Subtract physical minimum = false
#0.EEG stream -> Channel Selector "3:5;7:11;13:16"
  Channel List = 3:5;7:11;13:16
  Action = Select
  Channel Matching Method = Smart
-> Temporal filter => #2
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 2
  Low cut frequency (Hz) = 8
  High cut frequency (Hz) = 35
  Pass band ripple (dB) = 1
Input stream 1=#2, Input stream 2=#0.Stimulations -> Identity => #3
Input signal=#3.Output stream 1, Input stimulations=#3.Output stream 2 -> Stimulation based epoching "Down trials" => #4
  Epoch duration (in sec) = 3
  Epoch offset (in sec) = 0
  Stimulation to epoch from = OVTK_GDF_Down
Input signal=#3.Output stream 1, Input stimulations=#3.Output stream 2 -> Stimulation based epoching "Up trials" => #5
  Epoch duration (in sec) = 3
  Epoch offset (in sec) = 0
  Stimulation to epoch from = OVTK_GDF_Up
Stimulations=#3.Output stream 2, Signal condition 1=#4, Signal condition 2=#5 -> CSP Spatial Filter Trainer
  Train Trigger = OVTK_StimulationId_Train
  Spatial filter configuration = ${Player_ScenarioDirectory}/csp-spatial-filter.cfg
  Filter dimension = 6
  Save as box config = true
-> Player Controller
  Stimulation name = OVTK_StimulationId_TrainCompleted
  Action to perform = Stop
