OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=2.2.0)

GDF file reader => #0
  Filename = C:/Users/Mathi/Documents/DTU/Bachelor Project/OpenViBE/Experiments/Niels_Forsog2_Layout2.gdf
  Samples per buffer = 32
  Subtract physical minimum = false
#0.EEG stream -> EOG / EEG Selector => #1
  Box clock frequency in Hz = 8
  Matlab executable (path) = C:/Program Files/MATLAB/R2019b/bin/win64/MATLAB.exe
  Matlab working directory = ${Player_ScenarioDirectory}/MATLAB
  Initialize function = selector_Initialize
  Process function = selector_Process
  Uninitialize function = selector_Uninitialize
#1.EEG output -> CSP Spatial Filter
  Spatial Filter Coefficients = 2.703847e-001 -2.033485e-001 2.403200e-001 2.356385e-001 3.924334e-001 2.392066e-001 1.127002e-001 5.732516e-001 3.104992e-001 2.895371e-001 1.986914e-001 -2.802680e-001 8.642486e-002 -2.668905e-001 -2.873133e-001 -3.079680e-001 -2.311904e-001 -3.049968e-001 -3.204301e-001 -4.425807e-001 -2.982545e-001 -3.624581e-001 -1.744479e-002 -7.034878e-001 -5.995533e-003 -1.229489e-001 1.247895e-001 2.070440e-002 6.842287e-002 -2.541404e-001 -2.561868e-001 -3.879915e-001 4.338307e-001 1.443247e-001 3.069893e-001 3.027873e-001 3.956776e-001 2.813833e-001 2.775941e-001 3.539172e-001 2.829927e-001 3.027860e-001 3.108204e-001 2.946543e-001 8.225412e-001 2.972170e-001 1.898263e-001 2.250992e-001 1.687568e-001 -1.534859e-001 -2.300909e-001 4.962294e-002 1.434820e-001 1.137746e-001 8.609021e-002 2.163431e-001 2.683773e-001 3.076638e-001 3.600542e-001 3.077418e-001 2.519831e-001 2.256527e-001 3.292362e-001 2.892913e-001 3.994603e-001 3.099987e-001
  Number of Output Channels = 6
  Number of Input Channels = 11
  Filter matrix file =
  0x8d21ff41 = ${Player_ScenarioDirectory}/csp-spatial-filter.cfg
-> Time based epoching
  Epoch 1 duration (in sec) = 1.000000
  Epoch 1 intervals (in sec) = 0.062500
-> Simple DSP
  Equation = x*x
-> Signal average
-> Simple DSP
  Equation = log(1+x)
-> Feature aggregator => #7
Features=#7 -> Classifier processor => #8
  Filename to load configuration from = ${Player_ScenarioDirectory}/csp-classifier.cfg
EEG input=#8.Probability values, EOG input=#1.EOG output, EEG tag=#8.Labels -> Class output => #9
  Box clock frequency in Hz = 8
  Matlab executable (path) = C:/Program Files/MATLAB/R2019b/bin/win64/MATLAB.exe
  Matlab working directory = ${Player_ScenarioDirectory}/MATLAB
  Initialize function = classoutput_Initialize
  Process function = classoutput_Process
  Uninitialize function = classoutput_Uninitialize
Data=#9 -> Signal display
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = true
  Multiview = false
