OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=2.2.0)

GDF file reader => #0
  Filename = C:/Users/Mathi/Documents/DTU/Bachelor Project/OpenViBE/Experiments/Niels_Forsog1_Layout2.gdf
  Samples per buffer = 32
  Subtract physical minimum = false
#0.EEG stream -> Channel Selector "3:5;7:11;13:16"
  Channel List = 3:5;7:11;13:16
  Action = Select
  Channel Matching Method = Smart
-> Temporal filter => #2
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 2
  Low cut frequency (Hz) = 8
  High cut frequency (Hz) = 35
  Pass band ripple (dB) = 1
Input stream 1=#2, Input stream 2=#0.Stimulations -> Identity => #3
#3.Output stream 1 -> CSP Spatial Filter => #4
  Spatial Filter Coefficients = -1.025592e-001 -7.992702e-002 -3.380574e-002 -9.564073e-002 1.014601e-001 -1.039170e-001 8.733368e-002 -3.739840e-002 -2.037134e-001 7.071647e-001 3.741635e-001 -3.580719e-001 1.442817e-001 3.411863e-003 -1.213417e-001 -3.119889e-001 1.115873e-001 1.359580e-001 -1.116613e-001 -3.135968e-001 -1.250939e-001 -1.378700e-002 -2.625042e-001 -1.009421e-001 -2.279613e-001 6.689580e-001 -3.348420e-002 9.899176e-002 -4.863345e-002 4.481541e-001 -2.025669e-001 -9.318723e-002 5.258966e-002 2.090623e-004 -1.451749e-001 -3.856019e-001 -4.710458e-002 9.675494e-002 1.549741e-001 -7.944412e-002 -7.903602e-002 7.455923e-001 -3.815222e-001 2.166322e-001 7.102007e-002 -1.493399e-001 -5.719637e-002 -1.732339e-002 4.253947e-002 -1.286825e-001 -1.415511e-001 1.086118e-001 3.485295e-002 -2.764141e-001 8.364691e-001 -3.726375e-001 4.963272e-002 9.167431e-003 -1.381837e-002 -1.012741e-002 -1.700471e-002 -1.616294e-001 6.193112e-002 -2.344197e-002 -3.390554e-001 2.998192e-001 1.635785e-002 3.717487e-001 -8.495080e-002 8.709944e-002 -4.562827e-001 4.325673e-001 -3.228420e-001 7.993942e-003 -1.115950e-001 -1.922763e-001 2.762776e-001 2.720282e-002 1.158864e-001 -4.858494e-002 -3.275103e-001 2.691000e-001 8.273217e-002 1.568368e-001 6.632540e-002 -6.147631e-002 -4.658877e-001 5.034320e-001 -1.359116e-001 5.664146e-002 -2.065083e-001 3.221159e-001 -2.724882e-001 7.822386e-002 -2.063637e-001 1.384452e-001
  Number of Output Channels = 6
  Number of Input Channels = 16
  Filter matrix file =
  0x8d21ff41 = ${Player_ScenarioDirectory}/csp-spatial-filter.cfg
Input signal=#4, Input stimulations=#3.Output stream 2 -> Stimulation based epoching "Down trials"
  Epoch duration (in sec) = 3
  Epoch offset (in sec) = 0
  Stimulation to epoch from = OVTK_GDF_Down
-> Time based epoching
  Epoch 1 duration (in sec) = 1.000000
  Epoch 1 intervals (in sec) = 0.062500
-> Simple DSP
  Equation = x*x
-> Signal average
-> Simple DSP
  Equation = log(1+x)
-> Feature aggregator => #10
Input signal=#4, Input stimulations=#3.Output stream 2 -> Stimulation based epoching "Up trials"
  Epoch duration (in sec) = 3
  Epoch offset (in sec) = 0
  Stimulation to epoch from = OVTK_GDF_Up
-> Time based epoching
  Epoch 1 duration (in sec) = 1.000000
  Epoch 1 intervals (in sec) = 0.062500
-> Simple DSP
  Equation = x*x
-> Signal average
-> Simple DSP
  Equation = log(1+x)
-> Feature aggregator => #16
Stimulations=#3.Output stream 2, Features for class 1=#10, Features for class 2=#16 -> Classifier trainer
  Train trigger = OVTK_StimulationId_Train
  Filename to save configuration to = ${Player_ScenarioDirectory}/csp-classifier.cfg
  Multiclass strategy to apply = Native
  Class 1 label = OVTK_GDF_Down
  Class 2 label = OVTK_GDF_Up
  Algorithm to use = Support Vector Machine (SVM)
  Epsilon = 0.100000
  Weight =
  SVM type = C-SVC
  Degree = 3
  Kernel type = Radial basis function
  Weight Label =
  Epsilon tolerance = 0.001000
  Cost = 1.000000
  Cache size = 100.000000
  Gamma = 0.000000
  Nu = 0.500000
  Shrinking = true
  Coef 0 = 0.000000
  Number of partitions for k-fold cross-validation test = 5
  Balance classes = false
-> Player Controller
  Stimulation name = OVTK_StimulationId_TrainCompleted
  Action to perform = Stop
