OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=2.2.0)
0x790d75b8 = Yann Renard / Fabien Lotte
0x9f5c4075 = Data Acquisition
0xf6b2e3fa = Motor Imagery
0xf8034a49 = INRIA

Graz Motor Imagery BCI Stimulator => #0
  Lua Script = ${Player_ScenarioDirectory}/motor-imagery-bci-graz-stimulator.lua
  Number of Trials for Each Class = 10
  First Class = OVTK_GDF_Left
  Second Class = OVTK_GDF_Right
  Baseline Duration (in sec) = 20
  Wait For Beep Duration (in sec) = 0
  Wait For Cue Duration (in sec) = 2
  Display Cue Duration (in sec) = 2
  Feedback Duration (in sec) = 3.00
  End of Trial Minimum Duration (in sec) = 4
  End of Trial Maximum Duration (in sec) = 4
  Third Class = OVTK_GDF_Up
  Fourth Class = OVTK_GDF_Down
Stimulations=#0 -> Graz visualization
  Show instruction = true
  Show feedback = true
  Delay feedback = false
  Show accuracy = false
  Predictions to integrate = 5
  Positive feedback only = false

Acquisition client => #2
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024
Experiment information=#2.Experiment information, Signal=#2.Signal stream, Stimulation=#2.Stimulations -> GDF file writer
  Filename = ${Player_ScenarioDirectory}/signals/motor-imagery-csp-1-acquisition-[$core{date}-$core{time}].gdf
Input stream 1=#2.Experiment information, Input stream 2=#2.Signal stream, Input stream 3=#2.Stimulations -> Generic stream writer
  Filename = ${Player_ScenarioDirectory}/signals/motor-imagery-csp-1-acquisition-[$core{date}-$core{time}].ov
  Use compression = false
#2.Stimulations -> Player Controller
  Stimulation name = OVTK_StimulationId_ExperimentStop
  Action to perform = Stop
