OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=2.2.0)
0x790d75b8 = Yann Renard
0x9f5c4075 = Signal Monitoring
0xf6b2e3fa = Motor Imagery
0xf8034a49 = INRIA

Acquisition client => #0
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024
#0.Signal stream -> Temporal filter => #1
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 1.000000
  High cut frequency (Hz) = 40.000000
  Pass band ripple (dB) = 0.500000
Input stream 1=#0.Signal stream, Input stream 2=#1, Input stream 3=#0.Stimulations -> Identity => #2
  0xac367a9c = 6
Data=#2.Output stream 1, Stimulations=#2.Output stream 3 -> Signal display "Raw signals"
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Horizontal ruler = true
  Vertical ruler = false
  Multiview = false
Data=#2.Output stream 2, Stimulations=#2.Output stream 3 -> Signal display "Filtered signals"
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Horizontal ruler = true
  Vertical ruler = false
  Multiview = false
